PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1300, 800]
  expName = solo
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a psychology experiment for an academic course. A white dot will appear either above or below a cross in the center following two emojis. You have to press the 'up' arrow key if it is above and 'down' arrow key if it is below the cross.
        Press 'space' key to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent cue
      image [set every repeat] = $image1
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent cue_1
      image [set every repeat] = $image2
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (0, pos)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.4
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine thankyou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your participation!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/twara/OneDrive/Documents/solo_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image1': 'C:\\Users\\twara\\Downloads\\Happy Emoji [Download iPhone Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Confused Emoji [Download iPhone Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'},
      {'image1': 'C:\\Users\\twara\\Downloads\\Smiling Emoji [Download IOS Smiling Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Neutral Emoji [Free Download iPhone Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'},
      {'image1': 'C:\\Users\\twara\\Downloads\\Smiling With Closed Eyes Emoji [Free Download IOS Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Expressionless Emoji [Free Download IOS Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'},
      {'image1': 'C:\\Users\\twara\\Downloads\\Very Happy Emoji [Free Download IOS Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Worried Emoji [Free Download IOS Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'},
      {'image1': 'C:\\Users\\twara\\Downloads\\Laughing Emoji [Free Download IOS Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Confused Emoji [Download iPhone Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'},
      {'image1': 'C:\\Users\\twara\\Downloads\\Hugging Emoji [Download iPhone Emojis].png', 'image2': 'C:\\Users\\twara\\Downloads\\Neutral Emoji [Free Download iPhone Emojis].png', 'pos': 0.3, 'corr_resp': 'up', 'c_ic': 'c'}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
    Routine trial
  LoopTerminator trials
  Routine thankyou
